PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = oculo
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1280, 1024]
  color = $[0.0000, 0.0000, 0.0000]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = pupillo_imaf
  eyetracker = SR Research Ltd
  logging level = debug
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Routines
  Routine Question_afterimage
    TextComponent question_ai
      letterHeight = 0.07
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Avez-vous eu un effet d'image rémanente du stimulus pendant la phase d'imagination (entre les bips) ?
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    SliderComponent slider
      color = White
      forceEndRoutine = True
      granularity = 1
      labels = ('Non', 'Oui')
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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  Routine End
    TextComponent text_end
      color = lightgrey
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Vos réponses ont bien été enregistrées !
        Nous vous remercions pour votre participation !
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Definitions
    TextComponent definition
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Voici un petit point définitions pour bien comprendre les questions qui vous seront posées.

        Vivacité d'une représentation mentale : Certaines personnes peuvent mentalement se représenter des images aussi nettement que si elles les avaient sous les yeux tandis que d'autres n'ont pas d'images mentales ou très peu. Vous allez pouvoir noter la vivacité de vos représentations mentales sur une échelle de 1 à 4 avec 1 étant "Pas d'images mentales, aucune forme n'a été visualisée" et 4 étant "Image vive, aussi nette que si elle était présentée sur l'écran.

        Image rémanente : image qui continue à apparaître dans les yeux après la période d'exposition de l'image originale.

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration_before
    KeyboardComponent key_resp_cali_before
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_cali_before
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Nous allons devoir régler la machine.

        Merci de fixer le point qui va apparaître à l'écran et de le suivre du regard.

        (Appuyer sur la barre d'espace pour continuer)
  Routine Calibration_after
    TextComponent text_cali_after
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vous avez terminé la phase de calibration !

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp_cali_after
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction
    TextComponent instruction
      color = lightgrey
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Pour rappel, vous allez participer à une expérience d'imagerie. Celle-ci se décompose en 4 phases.

        1) Vous allez voir une croix apparaître au centre de l'écran. Un signal auditif vous indiquera la couleur, blanche ou noire, que vous devrez ensuite imaginer.
        2) La croix de fixation va être remplacée par les contours d’un triangle. Vous devrez mentalement imaginer le remplir avec la couleur, blanche ou noire, que vous aurez entendu à l’étape précédente. Deux signaux sonores marqueront respectivement le début et la fin de cette phase d’imagination.
        3) Les contours du triangle vont disparaître et la croix de fixation va réapparaître. Veuillez garder les yeux fixés sur la croix.
        4) Un triangle va apparaître à l’écran. Veuillez garder les yeux fixés sur le triangle.
        5) Le triangle va disparaître et la croix de fixation va réapparaître. Veuillez garder les yeux fixés sur la croix.
        6) Vous devrez répondre à une question portant sur la vivacité de votre image mentale.

        Pendant l’expérience, essayez de limiter les clignements des yeux et ne bougez pas la tête.

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block_test
    PolygonComponent rest_1
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 8.2
      stopVal [duration (s)] = 4
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    PolygonComponent rest_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 17.2
      stopVal [duration (s)] = 10
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    SoundComponent color_sound
      hamming = False
      sound [set every repeat] = $sound_color
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
      volume = 5
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    PolygonComponent fix_cross
      fillColor = $[-0.2, -0.2, -0.2]
      lineColor = $[-0.2, -0.2, -0.2]
      lineWidth = 0.2
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 26.6
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    PolygonComponent imag
      fillColor = $[0,0,0]
      lineColor [set every repeat] = $border_col
      ori [set every repeat] = orientation
      shape = triangle
      size = [695, 695]
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 6
      units = pix
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    SoundComponent start_sound_imag
      sound = A
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.5
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    SoundComponent end_sound_imag
      sound = A
      startVal [time (s)] = 7.7
      stopVal [duration (s)] = 0.5
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    PolygonComponent stimuli
      fillColor [set every repeat] = $color_rgb
      lineColor [set every repeat] = $border_col
      ori [set every repeat] = orientation
      shape = triangle
      size = [695, 695]
      startVal [time (s)] = 12.2
      stopVal [duration (s)] = 5
      units = pix
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    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0
      stopVal [duration (s)] = 28
      syncScreenRefresh = False
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  Routine Start_test
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_start
      color = lightgrey
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        L’entraînement est terminé. Nous allons commencer l’expérience.

        Pour rappel, dès que vous entendrez le signal sonore, vous devrez essayer de remplir le triangle mentalement avec la couleur, blanche ou noire, entendue au début de l’essai.
        Ensuite, veuillez garder les yeux au centre de l’écran jusqu’à la fin de l’essai.

        Veuillez fixer la croix au centre de l'écran.

        (Appuyer sur la barre d'espace pour commencer)
  Routine Start_train
    KeyboardComponent key_resp_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_train
      color = lightgrey
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Nous allons commencer par une phase d'entraînement.

        Pour rappel, dès que vous entendrez le signal sonore, vous devrez essayer de remplir le triangle mentalement avec la couleur, blanche ou noire, entendue au début de l’essai.
        Ensuite, veuillez garder les yeux au centre de l’écran jusqu’à la fin de l’essai.

        Veuillez fixer la croix au centre de l'écran.

        (Appuyer sur la barre d'espace pour commencer)
  Routine Question_vividness
    TextComponent question_vivid
      color = lightgrey
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Avec quelle vivacité avez-vous imaginé ou visualisé la couleur ?
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    SliderComponent vivid
      borderColor = lightgrey
      color = lightgrey
      fillColor = dimgrey
      forceEndRoutine = True
      granularity = 1
      labels = ('Pas du tout vive\nAucune couleur n\'est apparue\ndans l\'imagerie', '', '', 'Très vive\nPresque comme si elle\navait été vue')
      letterHeight = 0.03
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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  EyetrackerCalibrationRoutine Calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine Calibration
  Routine Instruction
  Routine Start_train
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = conditions\conditions_pupillo_train.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'orientation': 90, 'color_rgb': [1, 1, 1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'blanc', 'sound_color': 'blanc.wav'},
      {'orientation': 180, 'color_rgb': [-1, -1, -1], 'border_col': [-0.1, -0.1, -0.1], 'imagery_color': 'noir', 'sound_color': 'noir.wav'}]
    Routine Block_test
    Routine Question_vividness
  LoopTerminator training
  Routine Start_test
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = conditions\conditions_pupillo.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'orientation': 0, 'color_rgb': [1, 1, 1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'blanc', 'sound_color': 'blanc.wav'},
      {'orientation': 90, 'color_rgb': [1, 1, 1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'blanc', 'sound_color': 'blanc.wav'},
      {'orientation': 180, 'color_rgb': [1, 1, 1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'blanc', 'sound_color': 'blanc.wav'},
      {'orientation': 270, 'color_rgb': [1, 1, 1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'blanc', 'sound_color': 'blanc.wav'},
      {'orientation': 0, 'color_rgb': [-1, -1, -1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'noir', 'sound_color': 'noir.wav'},
      {'orientation': 90, 'color_rgb': [-1, -1, -1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'noir', 'sound_color': 'noir.wav'},
      {'orientation': 180, 'color_rgb': [-1, -1, -1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'noir', 'sound_color': 'noir.wav'},
      {'orientation': 270, 'color_rgb': [-1, -1, -1], 'border_col': [0.1, 0.1, 0.1], 'imagery_color': 'noir', 'sound_color': 'noir.wav'}]
    Routine Block_test
    Routine Question_vividness
  LoopTerminator test
  Routine End
