PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = oculo
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1280, 1024]
  color = $[0.0000, 0.0000, 0.0000]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = pupillo_repli
  eyetracker = SR Research Ltd
  logging level = debug
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Routines
  Routine End
    TextComponent text_end
      color = lightgrey
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Vos réponses ont bien été enregistrées !
        Nous vous remercions pour votre participation !
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration_before
    TextComponent text_cali_before
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Nous allons devoir régler la machine.

        Merci de fixer le point qui va apparaître à l'écran et de le suivre du regard.

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp_cali_before
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration_after
    TextComponent text_cali_after
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vous avez terminé la phase de calibration !

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp_cali_after
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction
    TextComponent instruction
      color = lightgrey
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Pour rappel, vous allez participer à une expérience d'imagerie. Celle-ci se décompose en 4 phases.

        1) Vous allez voir un triangle apparaître au centre de l'écran.
        2) Le triangle va être remplacé par un masque dynamique.
        3) L'écran va redevenir gris. Deux signaux sonores marqueront respectivement le début et la fin de la phase d’imagination. Entre ces deux signaux, vous devrez revisualiser le même triangle en prenant en considération sa taille, son orientation et son intensité lumineuse, et ce tout en gardant les yeux fixés sur la croix centrale.
        4) Vous devrez répondre à une question portant sur la vivacité de votre image mentale.

        Pendant l’expérience, essayez de limiter les clignements des yeux et ne bougez pas la tête.

        (Appuyer sur la barre d'espace pour continuer)
    KeyboardComponent key_resp_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question_vividness
    TextComponent question_vivid
      color = lightgrey
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Avec quelle vivacité avez-vous imaginé ou revisualisé le triangle ?
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    SliderComponent vivid
      borderColor = lightgrey
      color = lightgrey
      fillColor = dimgrey
      forceEndRoutine = True
      granularity = 1
      labels = ('Pas du tout vive\nAucune forme n\'est apparue\ndans l\'imagerie', '', '', 'Très vive\nPresque comme si elle\navait été vue')
      letterHeight = 0.03
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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  Routine Start_train
    TextComponent text_train
      color = lightgrey
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Nous allons commencer par une phase d'entraînement.

        Pour rappel, concentrez-vous sur le triangle et essayez de mémoriser sa taille, son orientation et sa couleur.
        Dès que vous entendrez le signal sonore, imaginez ou revisualisez ce triangle aussi précisément que possible.

        Veuillez fixer la croix au centre de l'écran.

        (Appuyer sur la barre d'espace pour commencer)
    KeyboardComponent key_resp_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block_test
    NoiseStimComponent rest
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 10
      noiseElementSize = 0.005
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (2,2)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 10
      texture resolution = 256
      units = norm
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    PolygonComponent fix_cross
      fillColor = $[-0.2, -0.2, -0.2]
      lineColor = $[-0.2, -0.2, -0.2]
      lineWidth = 0.2
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 22
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    PolygonComponent stimuli
      fillColor [set every repeat] = $color_rgb
      lineColor [set every repeat] = $color_rgb
      ori [set every repeat] = orientation
      shape = triangle
      size = [695.65, 695.88]
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 5
      units = pix
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    SoundComponent start_sound_imag
      sound = A
      startVal [time (s)] = 17.6
      stopVal [duration (s)] = 0.5
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    SoundComponent end_sound_imag
      sound = A
      startVal [time (s)] = 22.1
      stopVal [duration (s)] = 0.5
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    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 23.5
      syncScreenRefresh = False
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  Routine Start_test
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_start
      color = lightgrey
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        La phase d'entraînement est terminée !

        Nous allons maintenant passer à la véritable expérience.

        Pour rappel, concentrez-vous sur le triangle et essayez de mémoriser sa taille, son orientation et sa couleur.
        Dès que vous entendrez le signal sonore, imaginez ou revisualisez ce triangle aussi précisément que possible.

        Veuillez fixer la croix au centre de l'écran.

        (Appuyer sur la barre d'espace pour commencer)
  EyetrackerCalibrationRoutine Calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine Calibration
  Routine Instruction
  Routine Start_train
  LoopInitiator train loopType="TrialHandler"
    conditionsFile = conditions\conditions_pupillo_train.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'orientation': 90, 'color_rgb': [1, 1, 1]},
      {'orientation': 180, 'color_rgb': [-1, -1, -1]}]
    Routine Block_test
    Routine Question_vividness
  LoopTerminator train
  Routine Start_test
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = conditions\conditions_pupillo.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'orientation': 0, 'color_rgb': [1, 1, 1]},
      {'orientation': 90, 'color_rgb': [1, 1, 1]},
      {'orientation': 180, 'color_rgb': [1, 1, 1]},
      {'orientation': 270, 'color_rgb': [1, 1, 1]},
      {'orientation': 0, 'color_rgb': [-1, -1, -1]},
      {'orientation': 90, 'color_rgb': [-1, -1, -1]},
      {'orientation': 180, 'color_rgb': [-1, -1, -1]},
      {'orientation': 270, 'color_rgb': [-1, -1, -1]}]
    Routine Block_test
    Routine Question_vividness
  LoopTerminator test
  Routine End
